CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:400
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot startwith ".") (directory doesnot containregexp "[\\\\\\\\/]\\\\.")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):@@diameter_min@@,@@diameter_max@@
    Discard objects outside the diameter range?:@@discard_outside@@
    Discard objects touching the border of the image?:@@discard_border@@
    Method to distinguish clumped objects:@@declump_method@@
    Method to draw dividing lines between clumped objects:@@dividing_lines@@
    Size of smoothing filter:@@smoothing_filter_size@@
    Suppress local maxima that are closer than this minimum allowed distance:@@min_maxima_distance@@
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:@@auto_smoothing@@
    Automatically calculate minimum allowed distance between local maxima?:@@auto_distance@@
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:@@threshold_strategy@@
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    Threshold smoothing scale:@@threshold_smoothing@@
    Threshold correction factor:@@threshold_correction@@
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei.csv
    Use the object name for the file name?:No
